---
API: 2.1
OpenSesame: 3.3.6a1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "OMM Entry Point"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/git/omm-client/osexp"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define OMMAnnounce announce
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_participant "[participant]"
	set omm_api 1
	set description "Announce-participant plugin for Open Monkey Mind"

define repeat_cycle be_infinite
	set description "Optionally repeat a cycle from a loop"
	set condition always

define OMMDetectParticipant detect
	set serial_port COM3
	set participant_variable participant
	set detector Dummy

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run omm_loop always

define loop omm_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run omm_sequence

define sequence omm_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run wait always
	run detect always
	run announce always
	run be_infinite always

define sketchpad wait
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="waiting for participant" x=0 y=0 z_index=0

